PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Cedula'], expName, expInfo['date'])
  Experiment info = {'Cedula': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = YOUNSTE
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Routines
  Routine Train_Img_CategCaras
    ImageComponent FruitVeg_image
      image [set every repeat] = $Train_CategCaras_img_file
      size = (0.5*stf, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine NoLiftFinger_Warning
    TextComponent NoLiftFinger_Warning_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = penalty
      text = Cuando escoja no levante el dedo. 
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  Routine Train_CategCaras
    CodeComponent Train_CategCaras_code
      Code Type = Auto->JS
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      Begin Experiment:
        FingerLift_penalty = 5 #(seconds)
        Mouse_tol = 0.5 #to detect finger jumps (norm. units)
      Begin Routine:
        Options_Appear = False
        RT = -999999 #response time (no longer in bottom square - time finger arrived to bottom square)
        Finger_Jump = -1
        penalty = 0
        x0 = 999 #Initialize
        y0 = 9999
        x1 = 999
        y1 = 999
      Each Frame:
        if Train_CategCaras_Inferior_polygon.contains(Train_CategCaras_mouse):
            Options_Appear = True

        if (RT < 0 ) & (Options_Appear==True) & (not Train_CategCaras_Inferior_polygon.contains(Train_CategCaras_mouse)):
            RT = Train_CategCaras_Beh_mouse.mouseClock.getTime()
            Trials_Train_CategCaras.addData('Train_CategCaras.RT', RT)

        if Options_Appear & Train_CategCaras_Izq_polygon.contains(Train_CategCaras_mouse):
            Trials_Train_CategCaras.addData('Train_CategCaras.Response', "Fruta")
            continueRoutine = False

        if Options_Appear & Train_CategCaras_Der_polygon.contains(Train_CategCaras_mouse):
            Trials_Train_CategCaras.addData('Train_CategCaras.Response', "Verdura")
            continueRoutine = False

        if Options_Appear == True:
            if Finger_Jump < 0:
                x0, y0 = Train_CategCaras_mouse.getPos()
                Finger_Jump = 0
            elif Finger_Jump == 0:
                x1, y1 = Train_CategCaras_mouse.getPos()
                if abs(y1-y0) > Mouse_tol or abs(x1-x0) > Mouse_tol:
                    Finger_Jump = 1
                    penalty = FingerLift_penalty
                    Trials_Train_CategCaras.addData('Train_CategCaras.FingerJump', Finger_Jump)
                    continueRoutine = False
                else:
                   x0, y0 = Train_CategCaras_mouse.getPos()
      End Routine:
        MT = Train_CategCaras_Beh_mouse.mouseClock.getTime() - RT
        Trials_Train_CategCaras.addData('Train_CategCaras.MT', MT)
    MouseComponent Train_CategCaras_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    MouseComponent Train_CategCaras_Beh_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [condition] = Options_Appear
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    PolygonComponent Train_CategCaras_Izq_polygon
      fillColor = white
      lineColor = $(-1.0000, -1.0000, -1.0000)
      pos = (-0.75, 0.75)
      shape = rectangle
      size = (0.25*stf, 0.25)
      startVal [condition] = Options_Appear
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    PolygonComponent Train_CategCaras_Der_polygon
      fillColor = white
      lineColor = $(-1.0000, -1.0000, -1.0000)
      pos = (0.75, 0.75)
      shape = rectangle
      size = (0.25*stf, 0.25)
      startVal [condition] = Options_Appear
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    PolygonComponent Train_CategCaras_Inferior_polygon
      fillColor = white
      lineColor = $(-1.0000, -1.0000, -1.0000)
      pos = (0, -0.8)
      shape = rectangle
      size = (0.25*stf, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent Train_CategCaras_Male_text
      letterHeight = 0.08
      pos = (-0.75, 0.5)
      startVal [condition] = Options_Appear
      text = Fruta
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    TextComponent Train_CategCaras_Female_text
      letterHeight = 0.08
      pos = (0.75, 0.5)
      startVal [condition] = Options_Appear
      text = Verdura
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  Routine Thanks
    TextComponent Thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Gracias por su participación. 
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  Routine Instructions
    TextComponent Instr_CategCaras_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $I_CategCaras
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    CodeComponent temp_code
      Code Type = Auto->JS
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      Begin Experiment:
        wind = Instr_CategCaras_text.win
        stf = wind.size[1]/wind.size[0]
      Begin Routine:
        wind = Instr_CategCaras_text.win
        stf = wind.size[1]/wind.size[0]
      Each Frame:
        wind = Instr_CategCaras_text.win
        stf = wind.size[1]/wind.size[0]
      End Routine:
        wind = Instr_CategCaras_text.win
        stf = wind.size[1]/wind.size[0]
    ImageComponent Next_button_CategCaras_image
      image = Images/next_button.png
      pos = (0.8, -0.8)
      size = (0.25*stf, 0.25)
      startVal [time (s)] = 0.0
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    MouseComponent Instr_CategCaras_mouse
      clickable = Next_button_CategCaras_image,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator Trials_Instr_CategCaras loopType="TrialHandler"
    conditionsFile = CategCaras_instr.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'I_CategCaras': 'Va a ver una imagen en pantalla. Tiene que escoger si es de categoria A o B.\nEmpecemos con un entrenamiento. \nOprima la flecha para continuar. '},
      {'I_CategCaras': 'En el entrenamiento va a ver la imagen de  una fruta o verdura, la cual estara poco tiempo en pantalla.\nOprima la flecha para continuar. '},
      {'I_CategCaras': 'Cuando desaparezca la imagen saldra un cuadrado en la parte inferior de la pantalla. \nPonga su dedo o mouse sobre ese cuadrado para ver las opciones FRUTA y VERDURA. Tiene que decidir si la imagen que vio era FRUTA o VERDURA.\nOprima la flecha para continuar.'},
      {'I_CategCaras': 'Si esta en una pantalla tactil, desplace su dedo sobre la pantalla desde el cuadrado inferior hacía la opcion escogida.\nOprima la flecha para empezar el ENTRENAMIENTO'}]
    Routine Instructions
  LoopTerminator Trials_Instr_CategCaras
  LoopInitiator Trials_Train_CategCaras loopType="TrialHandler"
    conditionsFile = CategCaras_Train_imgs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Train_CategCaras_img_file': 'Images/CategCaras_Train/apple.png', 'Train_CategCaras_Type_img': 'Fruit'},
      {'Train_CategCaras_img_file': 'Images/CategCaras_Train/watermelon.png', 'Train_CategCaras_Type_img': 'Fruit'},
      {'Train_CategCaras_img_file': 'Images/CategCaras_Train/banana.png', 'Train_CategCaras_Type_img': 'Fruit'},
      {'Train_CategCaras_img_file': 'Images/CategCaras_Train/lettuce.png', 'Train_CategCaras_Type_img': 'Vegetable'},
      {'Train_CategCaras_img_file': 'Images/CategCaras_Train/brocoli.png', 'Train_CategCaras_Type_img': 'Vegetable'},
      {'Train_CategCaras_img_file': 'Images/CategCaras_Train/zucchini.png', 'Train_CategCaras_Type_img': 'Vegetable'}]
    Routine Train_Img_CategCaras
    Routine Train_CategCaras
    Routine NoLiftFinger_Warning
  LoopTerminator Trials_Train_CategCaras
  Routine Thanks
